CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:38
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain "photons.tiff")
    Name to assign these images:NADHPhotons
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:NADHPhotons
    Name the output image:NADHRescaled
    Rescaling method:Divide by the image's maximum
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
Smooth:[module_num:6|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
    Select the input image:NADHRescaled
    Name the output image:NADHSmooth
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
    Edge intensity difference:.4
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
EnhanceEdges:[module_num:7|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
    Select the input image:NADHRescaled
    Name the output image:NADHEdges
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ApplyThreshold:[module_num:8|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
    Select the input image:NADHEdges
    Name the output image:EdgThres
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:.05
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:InvertedEdge
    Image or measurement?:Image
    Select the first image:EdgThres
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:10|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NADHRescaleEdge
    Image or measurement?:Image
    Select the first image:NADHRescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedEdge
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:NADHRescaleEdge
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:.05
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:13|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
    Name the output objects:FilteredNuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:None
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2.25
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.2
    Filter using a maximum measurement value?:Yes
    Maximum value:1.5

IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:FilteredNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NADHRescaled
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    Regularization factor:0
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:.9
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:Cytoplasm
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:No

ImageMath:[module_num:16|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enabled:False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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:RedoxRatio
    Image or measurement?:Image
    Select the first image:NADHPhotons
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FADPhotons
    Multiply the second image by:1.0
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
ImageMath:[module_num:17|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:N_a1t1
    Image or measurement?:Image
    Select the first image:NADHA1
    Multiply the first image by:.01
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    Image or measurement?:Image
    Select the second image:NADHT1
    Multiply the second image by:1.0
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
ImageMath:[module_num:18|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:N_a2t2
    Image or measurement?:Image
    Select the first image:NADHA2
    Multiply the first image by:.01
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    Image or measurement?:Image
    Select the second image:NADHT2
    Multiply the second image by:1.0
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
ImageMath:[module_num:19|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:NADHTm
    Image or measurement?:Image
    Select the first image:N_a1t1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:N_a2t2
    Multiply the second image by:1.0
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
ImageMath:[module_num:20|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:F_a1t1
    Image or measurement?:Image
    Select the first image:FADA1
    Multiply the first image by:.01
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    Image or measurement?:Image
    Select the second image:FADT1
    Multiply the second image by:1.0
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
ImageMath:[module_num:21|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:F_a2t2
    Image or measurement?:Image
    Select the first image:FADA2
    Multiply the first image by:.01
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    Image or measurement?:Image
    Select the second image:FADT2
    Multiply the second image by:1.0
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
ImageMath:[module_num:22|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:FADTm
    Image or measurement?:Image
    Select the first image:F_a2t2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:F_a1t1
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:23|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enabled:False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
    Hidden:1
    Select an image to measure:RedoxRatio
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:24|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enabled:False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
    Hidden:1
    Select an image to measure:NADHTm
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:25|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enabled:False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
    Hidden:1
    Select an image to measure:FADTm
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:26|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enabled:False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
    Hidden:1
    Select an image to measure:NADHT1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:27|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enabled:False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
    Hidden:1
    Select an image to measure:NADHT2
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:28|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enabled:False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
    Hidden:1
    Select an image to measure:NADHA1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:29|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enabled:False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
    Hidden:1
    Select an image to measure:NADHPhotons
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:30|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enabled:False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
    Hidden:1
    Select an image to measure:FADT1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:31|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enabled:False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
    Hidden:1
    Select an image to measure:FADT2
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:32|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enabled:False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
    Hidden:1
    Select an image to measure:FADA1
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:33|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enabled:False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
    Hidden:1
    Select an image to measure:FADPhotons
    Select objects to measure:Cytoplasm

ExportToSpreadsheet:[module_num:34|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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Cytoplasm|Intensity_StdIntensityEdge_FADTm,Cytoplasm|Intensity_StdIntensityEdge_FADPhotons,Cytoplasm|Intensity_StdIntensityEdge_NADHTm,Cytoplasm|Intensity_StdIntensityEdge_NADHA1,Cytoplasm|Intensity_StdIntensityEdge_NADHT1,Cytoplasm|Intensity_StdIntensityEdge_FADA1,Cytoplasm|Intensity_StdIntensityEdge_NADHT2,Cytoplasm|Intensity_StdIntensityEdge_RedoxRatio,Cytoplasm|Intensity_StdIntensityEdge_FADT1,Cytoplasm|Intensity_StdIntensityEdge_FADT2,Cytoplasm|Intensity_StdIntensityEdge_NADHPhotons,Cytoplasm|Intensity_MinIntensity_FADTm,Cytoplasm|Intensity_MinIntensity_FADPhotons,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.txt
    Use the object name for the file name?:No

OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADHRescaled
    Name the output image:NADHoverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Cytoplasm
    Select outline color:cyan
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:NADHoverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:NADHPhotons
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:1
    Saved file format:bmp
    Output file location:Same folder as image|Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Objects
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    Select the objects to save:Cytoplasm
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    Select method for constructing file names:Sequential numbers
    Select image name for file prefix:NADHPhotons
    Enter file prefix:Mask_image_
    Number of digits:2
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    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:Sequential numbers
    Select image name for file prefix:NADHPhotons
    Enter file prefix:Cell_mask_
    Number of digits:2
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    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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